config:
  title: Flow Cytometry
  description: UW BIOFAB Flow Cytometry protocols and libraries
  copyright: University of Washington
  version: 0.0.1
  authors: [{name: Ben Keller, affiliation: University of Washington}, {name: Devin Strickland, affiliation: University of Washington}, {name: Erriberto Lopez, affiliation: University of Washington}, {name: Abe Miller, affiliation: University of Washington}]
  maintainer: {name: Ben Keller, email: bjkeller@uw.edu}
  github: {user: bjkeller, repo: flow-cytometry, organization: klavinslab}
  aquadoc_version: 1.0.2
  aquarium_version: <%= Bioturk::Application.config.aquarium_version %>
operation_type: Cytometer Bead Calibration
category: Flow Cytometry
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: calibration beads, routing: B}
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documentation:
For most plan which runs **Flow Cytometry** operation, a **Cytometer Calibration** operation is required to be in the **plan**. 

*Flow Cytometery operations in a plan will not run until the calibration is run, if they are set up to require calibration.*

**In most cases only one calibration should be done per plan**

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protocol:
# frozen_string_literal: true

# Instructions to Calibrate cytometer, calibration measurements are retrieved and
# cytometer is prepared for flow.
#
# if operations are batched and use the same bead type,
# then we only calibrate once and assign the measurement
# results from that calibration to all operations in that bead type group
#
needs 'Flow Cytometry/Cytometers'
needs 'Standard Libs/Debug'
class Protocol
  include Cytometers
  include Debug

  BEAD_STOCK = 'calibration beads'
  KEY_BEAD = 'BEAD_UPLOAD'

  def intro
    show do
      title 'Calibrating the Flow Cytometer'
      separator
      note 'To compare different experiments against each other we must have a way to compare the fluorescence intensities across different flow cytometers.'
      note 'To achieve this we will be using small beads that fluoresce multiple colors.'
      note '<b>1.</b> Take chosen beads and dilute, if necessary.'
      note '<b>2.</b> Setup flow cytometer workspace and measure bead sample.'
      note '<b>3.</b> Upload .fcs file to Aquarium.'
    end
  end

  def main
    cytometer = Cytometers::BDAccuri.instance
    intro
    op_groups_by_bead = operations.group_by { |op| op.input(BEAD_STOCK).item }
    take_beads(op_groups_by_bead: op_groups_by_bead)
    op_groups_by_bead.each do |bead, ops|
      cytometer.clean
      # perform a calibration
      uploads, diluted_bead_item = cytometer.bead_calibration(bead_stock: bead, reuse_beads: true)
      cytometer.associate_uploads_to_bead_item('BEADS_uploads', bead, uploads)
      cytometer.associate_uploads_to_bead_item('BEADS_uploads', diluted_bead_item, uploads)

      cytometer.associate_uploads(KEY_BEAD, diluted_bead_item, uploads)

      # associate calibration measurments. If measurements already exist in this plan then dont overwrite
      ops.each do |op|
        # Add the diluted beads to the operations FieldValues
        # fv_name = 'Measured Diluted Beads'
        # op.add_input fv_name, diluted_bead_item.sample, diluted_bead_item.object_type
        # op.input(fv_name).set item: diluted_bead_item
        cytometer.associate_uploads(KEY_BEAD, op, uploads)
        safe_key = KEY_BEAD; i = 1
        until op.plan.get(safe_key).nil?
          safe_key = KEY_BEAD + i.to_s
          i += 1
        end
        cytometer.associate_uploads(KEY_BEAD, op.plan, uploads)
      end
    end
    cytometer.clean

    return_beads op_groups_by_bead, cytometer
    {}
  end

  # Create hashmap from bead sample to list of operations that
  # use that bead item
  def group_operations_by_bead
    ops_by_bead = {}
    operations.each do |op|
      bead_stock = op.input(BEAD_STOCK).item
      ops_by_bead[bead_stock] = [] if ops_by_bead[bead_stock].nil?
      ops_by_bead[bead_stock] << op
    end
    ops_by_bead
  end

  def take_beads(op_groups_by_bead:)
    show do
      title 'Collect Calibration Beads'
      note 'In the next step retrieve the following calibration beads:'
      op_groups_by_bead.each do |bead, _ops|
        bullet "Grab #{bead.sample.name} #{bead} Bead dispensers from Lot #{bead.get('Lot No.')}"
      end
      note 'If a valid leftover eppendorf of diluted beads exists for the given Lot, grab that instead'
      note 'Make sure to pay attention to Lot No. of beads throughout this protocol.'
    end
    take op_groups_by_bead.keys, interactive: true
  end

  def return_beads(op_groups_by_bead, _cytometer)
    show do
      title 'Return Calibration Beads'
      note 'Return beads to the correct Lot'
      op_groups_by_bead.each do |bead, _ops|
        check "Return bead dispensers and diluted beads to #{bead.get('Lot No.')}"
      end
    end
    release op_groups_by_bead.keys, interactive: true
  end
end

operation_type: Flow Cytometry 96 well
category: Flow Cytometry
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: 96 well plate, routing: A}
  - {ftype: number, role: input, name: well volume (µL)}
  - {ftype: string, role: input, name: sample type, choices: E coli,Yeast}
  - {ftype: string, role: input, name: require calibration?, choices: yes, no}
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documentation:
Protocol for running flow cytometry, including cleaning before and after, and running beads as a calibration sample. Samples are in 96-well plate. Plate can be partially or fully occupied. 

precondition:
def precondition(_op)
    
  if _op.input('require calibration?').value == 'yes'
      calibration_operation_type = OperationType.find_by_name("Cytometer Bead Calibration")
      calibration_op = _op.plan.operations.find { |op| op.operation_type_id == calibration_operation_type.id}
      
      if calibration_op.nil?
          _op.associate('Waiting for Calibration','In order to use Cytometer, `Cytometer Bead Calibration` must be run in the same plan')
          return false
      elsif calibration_op.status != 'done'
          _op.associate("Waiting for Calibration","Flow Cytometry cannot begin until Cytometer Calibration completes.")
          return false
      else
          _op.get_association('Waiting for Calibration').delete if _op.get_association('Waiting for Calibration')
          return true
      end
  else
      return true
  end
end

cost_model:
def cost(op)
  { labor: 0, materials: 3.50 }
end

protocol:
# frozen_string_literal: true

needs 'Flow Cytometry/Cytometers'

class Protocol
  include Cytometers

  INPUT_NAME = '96 well plate'
  WELL_VOL = 'well volume (L)' # not really used

  SAMPLE_TYPE = 'sample type'

  def main
    operations.retrieve # should be in loop!!!

    cytometer = Cytometers::BDAccuri.instance

    operations.each do |op|
      show do
        title 'Flow cytometery - info'
        warning "The following should be run on a browser window on the #{cytometer.cytometer_name} computer!"
      end

      cytometer.clean

      cytometer.run_sample_96(sample_string: op.input(SAMPLE_TYPE).val,
                              collection: op.input(INPUT_NAME).collection,
                              operation: op,
                              plan: op.plan)
    end
    cytometer.clean

    # dispose plates
    # operations.each { |op| op.input(INPUT_NAME).item.mark_as_deleted } # Why are we diposing the input collection?
    {}

    #   rescue CytometerInputError => e
    #     show { "Error: #{e.message}" }
  end
end

library: {name: BDAriaIII, category: Flow Cytometry}
code_source:
# frozen_string_literal: true

needs 'Flow Cytometry/Cytometers'

module Cytometers
  # Module for the BD Aria III cytometer.
  module BDAriaIII
    include Cytometer

    CYTOMETER_NAME = 'BD Aria III'
    TEMPLATE_DIR = ''

    # TODO: handle secrets differently
    LOGIN_USER = 'dummy_user'
    LOGIN_PASSWORD = 'dummy_password'

    TUBE_LABEL_STUB = 'Tube_%03d'

    DEFAULT_LOCATION = 'Health Sciences Building room H-581'

    def cytometer_name
      CYTOMETER_NAME
    end

    def location
      DEFAULT_LOCATION
    end

    def image_path
      FACS_IMAGE_PATH
    end

    def path_to(filename, extension = 'png')
      "#{image_path}/#{filename}.#{extension}"
    end

    def required_sample_tube
      '5 ml polystyrene round-bottom tube (Falcon 352054)'
    end

    def go_to_facs_and_login
      show do
        title 'Go to the FACS'
        note 'Take the cooler and the box with you.'
        note "The FACS is in #{location}."
      end

      show do
        title 'Log into the FACS instrument'

        note "User: #{LOGIN_USER}"
        note "Password: #{LOGIN_PASSWORD}"
      end
    end

    def set_up_instrument(experiment_name:, template:, events_to_record:, target_events:, args: {})
      check_sweet_spot

      create_new_experiment(
        name: experiment_name,
        template: template
      )

      verify_settings(
        events_to_record: events_to_record
      )

      set_up_sorting(
        target_events: target_events
      )
    end

    def check_sweet_spot
      show do
        title 'Check the Sweet Spot'

        check 'Make sure the Sweet Spot is engaged.'
        image path_to('sweetspot')
        note 'The purple and yellow shapes should be touching as in the figure.'
      end
    end

    def create_new_experiment(name:, template:)
      show do
        title 'Load the experiment template'

        note 'In the menu bar, click on <b>Experiment</b>, then <b>New Experiment</b>.'
        image path_to('new_experiment')

        note "In the <b>Experiment Templates</b> window, select <span style=\"background-color:yellow\"><b>#{template}</b></span>."
        image path_to('select_template')
      end

      show do
        title 'Open and rename the experiment'

        note 'Double click on the notebook so that it opens up.'
        image path_to('open_workbook')

        note "Rename the experiment as <span style=\"background-color:yellow\"><b>#{name}</b></span>."
        image path_to('rename')
      end
    end

    def verify_settings(events_to_record:)
      show do
        title 'Verify settings'

        note 'Verify that the <b>Stopping Gate</b> is set to <b>All Events</b>.'
        note "Verify that <b>Events To Record</b> is set to <b>#{number_with_delimiter(events_to_record)}</b>."
      end
    end

    def set_up_sorting(target_events:)
      show do
        title 'Set up sorting'

        note 'Click the <b>+</b> next to <b>Global Worksheets</B>, then the one next to <b>Global Sheet1</b>, then <b>Sort Layout</b>.'

        note 'Select or verify the following settings:'
        check '<b>Device:</b> 2 Tube'
        check '<b>Precision:</b> Purity'
        check "<b>Target Events:</b> #{number_with_delimiter(target_events)}"
        check '<b>Save Sort Reports:</b> Save All'

        note 'Check that the settings match this image, except <b>Target Events</b> and the number next to <b>P1</b>.'
        image path_to('sort_setup_complete')
      end
    end

    def set_and_run_tube(item:, tube_label:, tube_ct:, sort:)
      set_tube(item: item, tube_label: tube_label, tube_ct: tube_ct, sort: sort)
      load_tube(item: item, tube_label: tube_label)
    end

    def sort_tube(item:, tube_label:, default_to_sort:, gate_name: nil, debug:)
      place_tube_in_sorter(item_id: item.id, tube_label: tube_label)
      sort_library(item: item, default_to_sort: default_to_sort, debug: debug)
    end

    def set_tube(item:, tube_label:, tube_ct:, sort:)
      action = sort ? 'sort' : 'collect data for'

      software_tube_id = item.associations[:software_tube_id]

      if software_tube_id
        set_existing_tube(action, tube_label, software_tube_id)
      else
        software_tube_id = set_new_tube(
          action: action,
          tube_label: tube_label,
          tube_ct: tube_ct
        )
        item.associate(:software_tube_id, software_tube_id)
      end
    end

    def set_existing_tube(action, tube_label, software_tube_id)
      show do
        title "Set to #{action} #{tube_label}"

        check click_green_arrow(software_tube_id)
        image path_to('green_arrow')
      end
    end

    def set_new_tube(action:, tube_label:, tube_ct:)
      software_tube_id = format(TUBE_LABEL_STUB, tube_ct)

      show do
        title "Set to #{action} #{tube_label}"

        if tube_ct > 1
          check new_tube
          image path_to('new_tube')
        end

        check verify_tube(software_tube_id)

        check click_green_arrow(software_tube_id)
        image path_to('green_arrow')
      end

      software_tube_id
    end

    def place_tube_in_sorter(item_id:, tube_label:)
      show do
        title 'Prepare collection tube'

        note "Label a collection tube as \"#{item_id} - #{tube_label}.\""
        note 'Put 1 ml of PBS into the tube.'

        note 'Place the labeled tube into the left side of the holder like this.'
        image path_to('place_tube', 'JPG')

        note 'Insert the holder into the sorter and push it back as far as it will go.'
        image path_to('holder_placement', 'JPG')
      end
    end

    def load_tube(item:, tube_label:)
      show do
        title "Load tube #{tube_label}"

        note 'Vortex the tube for 3 Mississippi.'
        note 'Load the tube onto the stand and close the door.'
        # image path_to('sample_tube')

        note 'Click <b>Load</b> in the Acquisition Dashboard.'
        note 'After about 15 seconds, you will begin to see events displayed in the analysis sheet.'

        unless item.associations[:data_collected]
          check 'Click <b>Record Data</b>.'
          end
      end
    end

    def sort_library(item:, default_to_sort:, debug:)
      data = show do
        title 'Record percentage of positive cells'

        note 'Look in the table at the bottom of the data display for the <b>%Total</b> in the <b>P1</b> gate.'
        get 'number', var: 'pct_positive', label: 'Enter the <b>%Total</b>', default: 10
      end

      data[:pct_positive] = [10, 20, 50].sample if debug

      frac_positive = data[:pct_positive] / 100.0

      item.associate(:frac_positive, frac_positive)

      target_events = target_events(default_to_sort: default_to_sort, frac_positive: frac_positive)

      show do
        title 'Start sorting'

        note 'In the <b>Sort Layout</b> window:'
        note "1. Set <b>Target Events</b> to #{number_with_delimiter(target_events)}"
        note '2. Right click on the <b>P1</b> field (under <b>Left</b>) and select <b>Remove</b>'
        note '3. Right click on the same field and <b>add P1</b>'
        note 'Click <b>Sort</b>'
        note 'Adjust the flow rate as needed, up to <b>8.0</b>, keeping the efficiency <b>> 90%</b>'
        note "Allow the sorter to run until #{number_with_delimiter(target_events)} have been collected in the <b>P1</b> gate."
      end
    end

    def remove_tube_from_sorter(collection_tube:, item: nil)
      show do
        title 'Remove tube from sorter'

        note 'Once the <b>Target Events</b> has been reached, or the sample is running too low:'
        note 'Click <b>Stop Sorting</b>.'
        note "Remove the #{collection_tube} from the sorter, put the cap back on, and place it on ice."
        image path_to('place_tube', 'JPG')
      end
    end

    def remove_sample_tube(sample_tube:)
      show do
        title 'Remove sample tube'

        note 'Click <b>Unload</b>.'
        note "Remove the #{sample_tube} from the platform, put the cap back on, and place it on ice."
      end
    end

    def shutdown
      show do
        title 'Copy the sort reports to our data folder'

        note 'Open two new Explorer windows'
        note 'In one window, navigate to the <b>sort reports folder (D:\\BD\\FACSDiva\\SortReports)</b>'
        note 'Sort the files by <b>Date modified</b>'
        note "In the other window, navigate to <b>our data folder (D:\\AriaData\\#{LOGIN_USER}\\SortReports)</b>"
        note '<b>COPY</b> the most recently-modified folder in the <b>sort reports folder</b> to <b>our data folder</b>'
        image path_to('sort_reports')
      end
      show do
        title 'Disengage the Sweet Spot'

        check 'Click once on the purple and yellow shapes to turn the Sweet Spot OFF.'
        image path_to('sweetspot')
      end

      show do
        title 'Shutdown the instrument'

        note 'Logout of the software'
        note 'Log back in as <b>User:</b> ShutdownDaily'
        note 'Run shutdown: 10 min bleach and 4 min water.'
      end
    end

    ########## COMMON LANGUAGE ##########

    def new_tube
      'Click  <b>Next tube</b>.'
    end

    def verify_tube(software_tube_id)
      "Verify that the #{@tube_ct > 1 ? 'new' : 'first'} tube is labeled <b>\"#{software_tube_id}\"</b>"
    end

    def click_green_arrow(software_tube_id)
      "Click on the arrow next to <b>\"#{software_tube_id}\"</b>  and make sure it is <b><span style=\"color: green\">GREEN</span></b>"
    end
  end
end

library: {name: Cytometers, category: Flow Cytometry}
code_source:
# frozen_string_literal: true

needs 'Standard Libs/AssociationManagement'
needs 'Standard Libs/MatrixTools'
needs 'Standard Libs/Debug'

# Library for flow cytometry.
# Protocols should create an instance of the appropriate cytometer class with
# using the singleton instance method; e.g., `BDAccuri.instance`.
# All methods of the {Cytometer} module are included in these classes.
#
# [Need text on settings]
module Cytometers
  # Module to represent functions on flow cytometers.
  # Individual cytometers should mixin this module and {Singleton}.
  module Cytometer
    include ActionView::Helpers::NumberHelper
    include AssociationManagement
    include MatrixTools
    include Debug

    require 'json'

    KEY_SAMPLE = 'SAMPLE_UPLOAD'
    KEY_BEAD = 'BEAD_UPLOAD'

    FACS_IMAGE_PATH = 'Actions/FACS'

    # Run clean cycle of cytometer.
    def clean(args = {})
      args = clean_defaults.merge(args)
      labels = args[:labels]

      # check that there is sufficient volume of cleaning reagent
      show do
        title 'Check Levels of Cleaning Reagents'
        check "Locate the #{args[:container]}. It should contain #{labels.length} eppendorfs."
        labels.length.times do |ii|
          check "Check that eppendorf labeled  <b>#{labels[ii]}</b> at position  <b>#{args[:position][ii]}</b> contains at least #{args[:min_volume]} mL. If not, add <b>#{args[:add_volume]}</b> mL from jar labeled <b>#{args[:jar_labels][ii]}</b> located in cabinet above cytometer."
        end
      end

      # generate a 'dummy' sample_matrix
      samp_matrix = WellMatrix.create_empty(96, -1)
      samp_matrix.set('D4', 1)
      samp_matrix.set('D5', 1)
      samp_matrix.set('D6', 1)

      # run
      title_string = "Cleaning Template on #{cytometer_name}"
      run_template(template_file: args[:template_file],
                   settings: clean_settings,
                   title_string: title_string,
                   container: args[:container],
                   sample_matrix: samp_matrix)

      # clean-specific message
      show do
        note 'Cytometer does not require supervision during cleaning.'
      end
    end

    # Default arguments for {clean}
    def clean_defaults
      {
        template_file: 'CleanRegular.c6t',
        container: '24 tube rack',
        labels: %w[C D S],
        position: %w[D4 D5 D6],
        jar_labels: %w[Cleaning Decontamination Sheath],
        min_volume: 0.5, # mL
        add_volume: 1 # mL
      }
    end

    # Run bead calibration sample on cytometer from an eppendorf tube.
    # Associates data to item and plan.
    #
    # @param [Hash] args
    # @option args [Item] :bead_stock  stock of calibration beads
    # @option args [Operation] :operation the operation where calibration
    #                 is perfomed
    # @option args [Plan] :plan
    # @option args [Boolean] :reuse_beads  whether or not to use already made diluted beads if there are some leftover
    # @return new sample item representing diluted beads
    def bead_calibration(args)
      args = calibration_defaults.merge(args)
      bead_stock = args[:bead_stock]
      plan = args[:plan]
      op = args[:operation]

      bead_diluted = nil
      if args[:reuse_beads] && check_for_diluted_beads(bead_stock)
        args[:leftovers] = true
        # get most recent beads for this lot no to use as the leftovers. Its fine if this query misses sometimes since
        # diluted bead inventory is informally maintained, and all that really matters is the Lot No.
        bead_diluted = bead_stock.sample.in('Diluted beads').select { |item| item.get('Lot No.') == bead_stock.get('Lot No.') } # this is probably an incredibly slow query. Can we check for the value of data associations in active record queries?
      else
        args[:leftovers] = false
        # create new diluted bead item, same beads as bead stock, in aquarium
        bead_diluted = produce new_sample(bead_stock.sample.name, of: 'Bead', as: 'Diluted beads')
        bead_diluted.associate('Lot No.', bead_stock.get('Lot No.'))
      end

      show_bead_setup(args)

      samp_matrix = WellMatrix.create_empty(96, -1)
      samp_matrix.set('A1', bead_diluted.sample.id)

      # run
      title_string = "Calibration Template on #{cytometer_name}"
      run_template(template_file: args[:template_file],
                   settings: calibration_settings,
                   title_string: title_string,
                   container: args[:container],
                   sample_matrix: samp_matrix,
                   item_number: bead_diluted.id)
      uploads = upload_files(expected_num_uploads: 1)

      [uploads, bead_diluted]
    end

    # Inquire if there is an already made
    # diluted beads available from the target lot
    # that can be used for calibration instead of stock
    #
    # @stock [Item]  the bead stock we were going to use
    def check_for_diluted_beads(stock)
      lotno = stock.get('Lot No.')
      resp = show do
        title 'Check for Existing Diluted Beads'
        note "If there is diluted beads of the right type left over from a previous calibration that aren't too old, then we will use those"
        note 'Diluted beads should be next to where the droplet dispensers are'
        select %w[yes no], label: "Could you find diluted beads from Lot no. #{lotno} that are less than one week old?", var: 'bead_answer', default: 1
        warning 'Do not use beads that are too old or are from a Lot no. other than the one specified'
      end

      (resp.get_response('bead_answer') == 'yes') # return
    end

    # Display instructions for preparing calibration bead sample.
    #
    # @param [Hash] args
    # @option args [Item] bead_stock  the item for the bead stock
    def show_bead_setup(args)
      bead_stock = args[:bead_stock]
      container = args[:container]
      source = "#{args[:bead_volume]} of #{bead_stock.sample.name}"
      destination = "#{args[:media_volume]} of #{args[:media]}"
      show do
        title 'Prepare Calibration sample'
        if !args[:leftovers]
          check "Add #{source}, brown cap to #{destination}"
          check "Add #{source}, white cap to <b>same</b> #{destination}"
        else
          note 'Use leftover diluted beads.'
        end
        check "Place eppendorf containing calibration sample in #{container} at position(s) #{args[:position].join(',')} of #{container}"
      end
    end

    # Default arguments for {bead_calibration}
    def calibration_defaults
      {
        container: '24 tube rack',
        template_file: 'calibration_beads_template.c6t',
        position: ['A1'],
        bead_volume: '1 drop',
        media_volume: '1 mL',
        media: 'PBS',
        reuse_beads: false
      }
    end

    # Run this cytometer on a 96 well plate and associate data.
    #
    # @param [Hash] args
    # @option args [Collection] :collection
    # @option args [Operation] :operation
    # @option args [String] :sample_string
    # @option args [Plan] :plan
    def run_sample_96(args)
      args = run_defaults.merge(args)
      sample_string = args[:sample_string]
      coll = args[:collection]
      plan = args[:plan]
      op = args[:operation]

      if debug # for testing only - ignore this
        matrix = coll.matrix
        matrix[0][0] = 1
        coll.matrix = matrix
        coll.save
      end

      if coll.nil?
        raise CytometerInputError.new, 'collection expected for 96 well plate'
      end

      dimensions = coll.dimensions

      if dimensions.empty?
        raise CytometerInputError.new, 'empty dimensions array for 96 well plate'
      end

      if !(dimensions.all? { |dim| dim > 0 }) || dimensions.length != 2
        raise CytometerInputError.new, 'bad dimensions for 96 well plate'
      end

      # count positions within plate that contain samples
      num_samples = 0
      dimensions[0].times do |rr|
        dimensions[1].times do |cc|
          num_samples += 1 if coll.matrix[rr][cc] > 0
        end
      end

      raise CytometerInputError.new, 'No samples to run' if num_samples < 1

      # convert collection's sample matrix to WellMatrix object for compatibility
      samp_matrix = WellMatrix.from_array(coll.matrix)

      run_template(template_file: args[:templates][sample_string],
                   settings: run_settings[sample_string],
                   title_string: "#{sample_string} measurement",
                   container: args[:container],
                   sample_matrix: samp_matrix,
                   item_number: coll.id)
      uploads = upload_files(expected_num_uploads: 1)

      associate_uploads(KEY_SAMPLE, plan, uploads) # associate each upload individually to plan
      associate_uploads(KEY_SAMPLE, op, uploads) # associate each upload individually to plan
      unless debug
        associate_uploads_to_plate(KEY_SAMPLE.pluralize, coll, uploads)
      end # associate a matrix of uploads to the plate

      uploads
    end

    # Default arguments for {run_sample_96}.
    def run_defaults
      {
        templates: { 'E coli' => 'Ecoli.c6t', 'Yeast' => 'Yeast_gates.c6t' },
        container: '96 well plate: Flat Bottom (Black)'
      }
    end

    # Export FCS files from this cytometer.
    #
    # Associates the {Upload} object for each to the input item and and the list
    # of objects to the plan of the operation.
    #
    # @param [Hash] args
    # @option args [Fixnum] :expected_num_uploads  the number of expected files
    #                 (default: 1)
    # @return [Array<Upload>] the array of uploads for exported files
    private def upload_files(args)
      args = upload_defaults.merge(args)
      expected_num_uploads = args[:expected_num_uploads]
      dirname = export_and_select_directory
      gather_uploads(expected_num_uploads, dirname)
    end

    # Defines the default values for arguments to {upload_files}
    #
    # @return [Hash] the default argument values
    private def upload_defaults
      { expected_num_uploads: 1 }
    end

    # Upload and check that have expected number of files
    # Give user 3 attempts to get all files. Return an Array of upload objects.
    # @param [Integer] expected_num_uploads  the number of expected files
    # @param [String]  dirname  the name of the directory where the files reside
    # @return [Array<Upload>]  an array of uploads for the exported files, or nil if nothing was uploaded
    private def gather_uploads(expected_num_uploads, dirname)
      uploads_from_show = {}
      num_uploads = 0
      attempt = 0; # number of upload attempts
      while (attempt < 3) && (num_uploads < expected_num_uploads)
        attempt += 1
        if attempt > 1
          show { warning 'Number of uploaded files was incorrect, please try again!' }
        end
        uploads_from_show = show do
          title "Select and highlight all .fcs files in directory <b>Desktop/FCS Exports/#{dirname}</b>"
          upload var: 'fcs_files'
        end

        unless uploads_from_show[:fcs_files].nil?
          num_uploads = uploads_from_show[:fcs_files].length
        end
      end
      uploads_from_show_to_array(uploads_from_show, :fcs_files)
    end

    # Converts the output of a show block that recieves uploads into a
    # list of uploads.
    #
    # @param [Hash] uploads_from_show  the hash return by a show block which accepts user input
    # @param [Symbol] upload_var  the symbol key which the target uploads are stored under in uploads_from_show
    # @return [Array<Upload>]  an array of uploads contained in the uploads_From_show at the given key
    private def uploads_from_show_to_array(uploads_from_show, upload_var)
      return spoof_uploads if debug

      upload_list = []
      if uploads_from_show[upload_var].nil?
        return upload_list
      else
        uploads_from_show[upload_var].each_with_index do |upload_hash, _ii|
          up = Upload.find(upload_hash[:id])
          upload_list.push(up)
          # upload_list[ii] = up
        end
      end

      upload_list
    end

    # Ignore, this is for debugging only
    private def spoof_uploads
      [Upload.find(1), Upload.find(2)]
    end

    # Associate all `uploads` to the `target` DataAssociator. The keys of each upload will be
    # the concatenation of `key_name` and that upload's id.
    # Associating fcs files to the plan and operation makes fcs data of any specific well
    # easily accessible to users
    #
    # @param [String] key_name  the name which describes this upload set
    # @param [Plan] plan  the plan that the uploads will be associated to
    # @param [Array<Upload>] uploads  An Array containing several Uploads
    # @effects  associates all the given uploads to `plan`, each with a
    #         unique key generated from the combining `keyname` and upload id
    def associate_uploads(key_name, target, uploads)
      if target
        associations = AssociationMap.new(target)
        uploads.each do |up|
          associations.put("U#{up.id}_#{key_name}", up)
        end
        associations.save
      end
    end

    # Associate a matrix containing all `uploads` to `collection`.
    # The upload matrix will map exactly to the sample matrix of
    # `collection`, and it will be associated to `collection` as a value
    # of `key_name`
    #
    # @param [String] key_name  the key that the upload matrix will
    #           be associated under
    # @param [Collection] collection  what the upload matrix will be
    #           associated to
    # @param [Array<Upload>] uploads  An Array containing several Uploads
    # @effects  associates all the given uploads to `collection` as a 2D array inside a singleton hash
    private def associate_uploads_to_plate(key_name, coll, uploads)
      # figure out size of collection (24 or 96)
      dims = coll.dimensions
      size = dims[0] * dims[1]
      well_uploads = WellMatrix.create_empty(size, -1)
      uploads.each do |up|
        # the first 3 letters of the upload filename will be the
        # alphanumeric well coordinate
        alpha_coord = up.name[0..2]
        well_uploads.set(alpha_coord, up.id)
      end
      coll_associations = AssociationMap.new(coll)
      # ensure we aren't overwriting an existing association
      unless coll_associations.get(key_name).nil?
        i = 0
        i += 1 until coll_associations.get("#{key_name}_#{i}").nil?
        key_name = "#{key_name}_#{i}"
      end

      coll_associations.put(key_name, 'upload_matrix' => well_uploads.to_a)
      coll_associations.save
    end

    def associate_uploads_to_bead_item(key_name, bead_item, uploads)
      bead_item_associations = AssociationMap.new(bead_item)
      unless bead_item_associations.get(key_name).nil?
        i = 0
        i += 1 until bead_item_associations.get("#{key_name}_#{i}").nil?
        key_name = "#{key_name}_#{i}"
      end
      bead_item_associations.put(key_name, uploads.first)
      bead_item_associations.save
    end

    # Display instructions for setting up a template and running it.
    #
    # @param [Hash] args
    # @option args [String] :template_file  the name of the template file
    # @option args [Hash] :settings  the hash of the settings for this run
    # @option args [String] :title_string  the title for the show
    # @option args [String] :container  previously known as "holder"
    # @option args [WellMatrix] :sample_matrix  an 8x12 WellMatrix with sample IDs for
    #                 occupied wells, -1 otherwise
    # @option args [Fixnum] :item_number  the item.id used in naming .c6 file
    # @raises CytometerInputError if the provided sample_matrix is nil
    def run_template(args)
      args = template_defaults.merge(args)
      template_file = args[:template_file]
      title_string = args[:title_string]
      container = args[:container]
      samp_matrix = args[:sample_matrix]

      raise CytometerInputError.new, 'sample_matrix is nil' if samp_matrix.nil?

      # build string, .c6 filename
      item_string = args[:item_number]
      item_string = "_#{item_string}_" unless item_string.nil?
      c6_filename = File.basename(template_file, '.c6t') +
                    item_string +
                    Time.zone.now.to_date.to_s +
                    '.c6'

      # visually check culture positions
      show do
        title "Check new sample #{title_string}"
        note 'Only the shaded positions should contain samples:'
        table samp_matrix.display_position_table { |samp| samp > 0 } # highlight cells with sample id > 0
      end

      choose_template(title_string, template_file, container)
      load_samples(title_string, container)
      enter_settings(title_string, args[:settings])
      start_run(title_string, samp_matrix, c6_filename)
    end

    ### FACS methods

    def template_defaults
      { item_number: '' }
    end

    def target_events(default_to_sort:, frac_positive:)
      (default_to_sort * frac_positive).to_i
    end

    def required_sample_tube; end

    def check_sweet_spot; end

    # Error class for bad cytometer parameters.
    class CytometerInputError < StandardError; end
  end

  # Singleton class for the BDAccuri cytometer.
  # The interface of this class is defined by a mixin of the {Cytometer} module,
  # which provides the main interface for interacting with the cytometer.
  class BDAccuri
    include Singleton
    include Cytometer

    CYTOMETER_NAME = 'BD Accuri'
    TEMPLATE_DIR = 'aq_templates'

    # Gets Cytometer name. Otherwise it would be unavailable in 'parent' module.
    def cytometer_name
      CYTOMETER_NAME
    end

    # The settings used for calibration beads with this cytometer.
    def calibration_settings
      {
        settings: {
          'Run Limits' => '30 L',
          'Fluidics' => 'Slow',
          'Set Threshold' => 'FSC-H less than 300,000, SSC-H less than 250,000',
          'Wash Settings' => 'None',
          'Agitate Plate' => 'None'
        }
      }
    end

    # The settings used for cleaning this cytometer.
    def clean_settings
      {
        settings: {
          'Run Limits' => '2 Min',
          'Fluidics' => 'Slow',
          'Set Threshold' => 'FSC-H less than 80,000',
          'Wash Settings' => 'None',
          'Agitate Plate' => 'None'
        }
      }
    end

    # The settings for running this cytometer by organism.
    def run_settings
      {
        settings: {
          'E coli' => { 'Run Limits' => '60,000 events, 1 Min, 50 L',
                        'Fluidics' => 'Medium',
                        'Set Threshold' => 'FSC-H less than 8,000',
                        'Wash Settings' => 'None',
                        'Agitate Plate' => '1 Cycle every 12th well' },
          'Yeast' => { 'Run Limits' => '30,000 events',
                       'Fluidics' => 'Fast',
                       'Set Threshold' => 'FSC-H less than 400,000',
                       'Wash Settings' => 'None',
                       'Agitate Plate' => '1 Cycle every 12th well' }
        }
      }
    end

    # Display instructions for exporting FCS files and selecting the directory.
    #
    # @return [String] the name of the directory containing the exported files
    private def export_and_select_directory
      show do
        title "Export Data from Flow Cytometer #{CYTOMETER_NAME}"
        check 'Make sure that flow cytometer run is <b>DONE!</b>'
        check 'Press <b>CLOSE RUN DISPLAY</b>'
        check 'Select <b>File</b> => <b>Export ALL Samples as FCS...</b> (see below)'
        image 'Actions/FlowCytometry/saveFCS_menu_cropped.png'
      end
      ui = show do
        title "Select Data Directory for Flow Cytometer #{CYTOMETER_NAME}"
        warning 'Look for the name of the FCS directory that is created, as in example below. Your directory name will be different!'
        image 'Actions/FlowCytometry/saveFCS_dirname_cropped.png'
        get 'text', var: 'dirname', label: 'Enter the name of the export directory in <b>Desktop/FCS Exports/</b>'
      end
      ui[:dirname]
    end

    # Displays instructions for selecting the template file for the container type.
    #
    # @param [String] title_string  the title for the page
    # @param [String] template_file  the name of the template file
    # @param [String] container  the container type
    def choose_template(title_string, template_file, container)
      show do
        title "Select #{title_string}"
        check 'Open the BD Accuri software BD CSampler if not already open'
        check 'If the program is open and displaying <b>DONE!</b>, press <b>CLOSE RUN DISPLAY</b>'
        check 'Go to <b>File</b> => Select <b>Open workspace or template</b>'
        warning 'Do not save changes to workspace'
        check "Under <b>#{TEMPLATE_DIR}</b>, find and open <b>#{template_file}</b>"
        warning 'The filename should end in <b>.c6t</b>!'
        check "Make sure the <b>Plate Type</b> is <b>#{container}</b>"
      end
    end

    # Displays instructions for loading samples in the cytometer.
    #
    # @param [String] title_string  the title for the page
    # @param [String] container  the container type
    def load_samples(title_string, container)
      # load samples
      show do
        title "Load sample #{title_string}"
        warning 'Beware of moving parts! Keep black tray beneath cytometer free!'
        check 'Press <b>Eject Plate</b>'
        check 'Remove the plate from the cytometer arm and place it on cytometer lid'
        check "For <b>#{container}</b> containing <b>#{title_string}</b>: remove all seals or lids, uncap any capped samples"
        check "Place <b>#{container}</b> containing <b>#{title_string}</b> on cytometer arm"
        warning 'Make sure well <b>A1</b> is aligned with the red sticker on the cytometer arm!'
        check 'Press <b>Load Plate</b>'
      end
    end

    # Displays instructions for loading settings to the cytometer.
    #
    # @param [String] title_string  the title for the page
    # @param [Hash] settings  the settings for the cytometer
    # @see calibration_settings
    # @see clean_settings
    # @see run_settings
    def enter_settings(title_string, settings)
      show do
        title "Settings for #{title_string}"
        check 'Select the <b>Auto Collect</b> table towards the top of the window'
        note 'You will be using the settings listed below'
        warning 'You may enter settings manually, <b>OR</b> press Control+left mouse button click to select a well that already has these settings'
        warning 'A red box will appear around the selected well'
        settings&.each do |key, value|
          check "Make sure that <b>#{key}</b> is set to:"
          value.each { |type, val| bullet "#{type} - #{val}" }
        end
      end
    end

    # Displays instructions to start the cytometer run.
    #
    # @param [String] title_string  the title for the page
    # @param [WellMatrix] sample_matrix  the matrix indicating where samples occur
    # @param [String] c6_filename  the name for the workspace file
    def start_run(title_string, samp_matrix, c6_filename)
      # run
      show do
        title "Select wells and run #{title_string}"
        check 'On the BD Accuri, using the left mouse button (or the Select/Deselect All links), click on all plate positions to be measured:'
        table samp_matrix.display_position_table { |samp| samp > 0 } # highlight cells with sample id > 0
        warning 'Only the well(s) that are listed in the Aquarium table should be checked'
        check 'Click <b>Apply Settings</b> to apply the seetings to all checked wells. You will be prompted to save the workspace'
        check "Save file as <b>#{c6_filename}</b>"
        check 'Click <b>OPEN RUN DISPLAY</b>'
        check 'Click <b>AUTORUN</b>'
      end
    end
  end
end

library: {name: SonySH800S, category: Flow Cytometry}
code_source:
needs 'Flow Cytometry/Cytometers'

module Cytometers
  # module for the Sony SH800S cytometer.
  module SonySH800S
    include Cytometer

    CYTOMETER_NAME = 'Sony SH800S'
    TEMPLATE_DIR = ''

    # TODO: handle secrets differently
    LOGIN_USER = 'dummy_user'
    LOGIN_PASSWORD = 'dummy_password'

    TUBE_LABEL_STUB = "Tube - %d"

    DEFAULT_LOCATION = "NanoES 380B"

    def cytometer_name
      CYTOMETER_NAME
    end

    def location
      DEFAULT_LOCATION
    end

    def image_path
      "#{FACS_IMAGE_PATH}/sony_sh800s"
    end

    def path_to(filename, extension='png')
      "#{image_path}/#{filename}.#{extension}"
    end

    def go_to_facs_and_login
      show do
        title "Go to the FACS"
        note "Take the cooler and the box with you."
        note "The FACS is in #{location}."
      end

      show do
        title "Log into the FACS instrument"

        note "If the software is logged out, log back in with the following credentials:"
        note "User: #{LOGIN_USER}"
        note "Password: #{LOGIN_PASSWORD}"
      end
    end

    def set_up_instrument(experiment_name:, template:, events_to_record:, target_events:, args:{})
      insert_tube_holder

      create_new_experiment(
        name: experiment_name,
        template: template
      )

      verify_settings(
        events_to_record: events_to_record
      )

      set_up_sorting(
        target_events: target_events,
        args: args
      )
    end

    def insert_tube_holder
      show do
        title "Insert sample tube holder"

        note "Find the correct sample tube holder based on the type of tube " \
                "containing the cells to be sorted."
        image path_to('all_sample_tube_holders')

        note "Place the sample tube holder in the instrument. " \
                "It is held in place by a magnet."
        image path_to('sample_tube_location')
      end
    end

    def create_new_experiment(name:, template:)
      show do
        title "Create a new experiment"

        note "If the <b>Create Experiment</b> window is not displayed, " \
                "click <b>New</b> on the <b> File</b> tab of the ribbon."

        image path_to('new_experiment')
        note "1. Under <b>My Templates</b>, click " \
                "<span style=\"background-color:yellow\"><b>#{template}</b></span>."

        note "2. Enter <span style=\"background-color:yellow\"><b>#{name}</b>" \
                "</span> in <b>Name</b>."

        note "3. Click <b>Create New Experiment</b>."
      end
    end

    def verify_settings(events_to_record:)
      show do
        title "Verify settings"

        note "Verify that <b>Sample Stop Condition</b> is set to <b>Recording and Sorting</b>."
        note "Under <b>Recording</b>, verify that the <b>Stop Condition</b> is set to " \
                "<b>Event Count</b>."
        note "Verify that <b>Stop Value</b> is set to " \
                "<b>#{number_with_delimiter(events_to_record)}</b>."
        image path_to('stop_condition')
      end
    end

    def set_up_sorting(target_events: nil, args:{})
      args = default_sort_settings.merge(args)
      args[:left_stop_value] = target_events if target_events.present?
      [:left_stop_value, :right_stop_value].each do |stop_value|
        args[stop_value] = number_with_delimiter(args[stop_value])
      end
      auto_record = args[:auto_record] ? "&#10003;" : "&#9634;"
      sort_settings_table = [
        ["","","","","<b>L</b>","<b>R</b>"],
        [
          "<b>Method:</b>",
          args[:method],
          "#{auto_record} Auto Record",
          "<b>To Sort:</b>",
          args[:left_gate],
          args[:right_gate]
        ],
        [
          "<b>Mode:</b>",
          args[:mode],
          args[:cell_size],
          "<b>Stop Value:</b>",
          args[:left_stop_value],
          args[:right_stop_value]
        ]
      ]

      show do
        title "Set up sorting"

        note "Show/hide the <b>Sort Control</b> by clicking the <b>^</b> along " \
                "the bottom edge of the screen."

        note 'Select or verify the following settings:'
        table sort_settings_table
      end
    end

    def default_sort_settings
      {
        method: "2 Way Tubes",
        mode: "Purity",
        cell_size: "Regular Cell",
        left_gate: "FITC positive",
        right_gate: "",
        left_stop_value: "&nbsp;" * 12,
        right_stop_value: "&nbsp;" * 12,
        auto_record: true
      }
    end

    def set_and_run_tube(item:, tube_label:, tube_ct:, sort:)
      set_tube(item: item, tube_label: tube_label, tube_ct: tube_ct, sort: sort)
      load_tube(item: item, tube_label: tube_label, sort: sort)
    end

    def sort_tube(item:, tube_label:, default_to_sort:, gate_name:, debug:)
      place_tube_in_sorter(item_id: item.id, tube_label: tube_label)
      sort_library(item: item, default_to_sort: default_to_sort, gate_name: gate_name, debug: debug)
    end

    def set_tube(item:, tube_label:, tube_ct:, sort:)
      action = sort ? 'sort' : 'collect data for'
      software_tube_id = set_new_tube(
        action: action,
        tube_label: tube_label,
        tube_ct: tube_ct
      )

      add_software_tube_id(item: item, software_tube_id: software_tube_id)
    end

    def set_new_tube(action: , tube_label:, tube_ct:)
      software_tube_id = TUBE_LABEL_STUB % [tube_ct]

      show do
        title "Set to #{action} #{tube_label}"

        if tube_ct > 1
          check new_tube
          image path_to('new_tube')
        end

        check verify_tube(software_tube_id)
      end

      software_tube_id
    end

    def add_software_tube_id(item:, software_tube_id:)
      sti = item.associations[:software_tube_id]

      if sti.present?
        sti = JSON.parse(sti)
        unless sti.kind_of?(Array)
          raise "Corrupt :software_tube_id (#{sti}) for #{item}"
        end
      else
        sti = []
      end

      sti << software_tube_id
      item.associate(:software_tube_id, sti)
    end

    # TODO: Make this specific to Sony
    def load_tube(item:, tube_label:, sort:)
      show do
        title "Load tube #{tube_label}"

        note "Vortex the tube for 3 Mississippi."
        note "Place the sample tube holder in the sample loader."
        note "If the sample loader door is closed, press the sample
                loader door button to open the sample loader door."

        note "Click <b>Start</b>."
        note "After about 15 seconds, you will begin to see events displayed on the plots."

        if sort
          note "Once a few thousand events have been recorded, click <b>Pause</b>."
        else
          note "Click <b>Record</b>."
          note "Once the instrument finishes recording, click <b>Stop</b>."
        end
      end
    end

    def place_tube_in_sorter(item_id:, tube_label:)
      show do
        title "Prepare collection tube"

        note "Label a collection tube as \"#{item_id} - #{tube_label}.\""
        note "Put 1.0 ml of PBS into the tube."

        note 'Place the holder in the sorter, if it is not already in.'
        image path_to('holder_placement', 'JPG')

        note "Place the labeled tube into the <b>left</b> side of the holder."
        image path_to('place_tube', 'JPG')

        note "Close the door and click <b>Load Collection</b> in the <b>Sort Control</b> pane."
      end
    end

    def sort_library(item:, default_to_sort:, gate_name:, debug:)
      data = show do
        title "Record percentage of positive cells"
        note "Look in the table at the bottom of the data display for the <b>%Total</b> " \
                "in the <b>#{gate_name}</b> gate."
        get "number", var: "pct_positive", label: "Enter the <b>%Total</b>", default: 10
      end

      data[:pct_positive] = [10, 20, 50].sample if debug

      frac_positive = data[:pct_positive] / 100.0

      item.associate(:frac_positive, frac_positive)

      target_events = target_events(default_to_sort: default_to_sort, frac_positive: frac_positive)

      show do
        title "Start sorting"

        note "In the <b>Sort Control</b> panel, set <b>Target Events</b> to " \
                "#{number_with_delimiter(target_events)}"

        note 'Click <b>Sort & Record Start</b> in the <b>Sort Control</b> pane.'
        warning 'Do not open the collection area door during sorting!'

        note "Allow the sorter to run until #{number_with_delimiter(target_events)} " \
                "have been collected in the <b>#{gate_name}</b> gate."

        note "If needed, increase the <b>Sample Pressure</b> until the <b>Event Rate</b> " \
                "is up to <b>6000 eps</b>, keeping the <b>Sort Efficiency</b> greater than 70%."
      end
    end

    def remove_tube_from_sorter(item:, collection_tube:)
      data = show do
            title "Remove tube from sorter"

            note "Once the <b>Target Events</b> has been reached, or the sample is " \
                    "running too low:"
            note "Click <b>Stop</b>."

            separator

            get "number", var: "sort_count", label: "Record the actual <b>Sort Count</b>"

            separator

            note "Remove the #{collection_tube} from the sorter, put the cap back on, " \
                    "and place it on ice."
            image path_to('place_tube', 'JPG')
        end

        data[:sort_count] = [10257, 205982, 501237].sample if debug

        item.associate(:sort_count, data[:sort_count])
    end

    def remove_sample_tube(sample_tube:)
        show do
            title "Remove sample tube"

            note "Click <b>Stop</b>."
            note "Remove the #{sample_tube} from the loader, put the cap back on, " \
                    "and place it on ice."
        end
    end

    def shutdown
      show do
        title "Shutdown"
        note "Ask a lab manager how to shut down this instrument"
      end
    end

    ########## COMMON LANGUAGE ##########

    def new_tube
        "Click  <b>Next tube</b>."
    end

    def verify_tube(software_tube_id)
        "Verify that the tube is labeled <b>#{software_tube_id}</b>"
    end

  end
end
